PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = TR
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
      Begin Experiment:
        mouse.setPos([0,0])
      Begin Routine:
        import random

        # Shuffle answers to appear at random positions each time
        # Uncomment if needed
        #ansList = [ans1, ans2, ans3, ans4]
        #random.shuffle(ansList)
        #ans4 = ansList.pop(-1)
        #ans3 = ansList.pop(-1)
        #ans2 = ansList.pop(-1)
        #ans1 = ansList.pop(-1)


        colorList = ['red', 'green', 'blue', (255,255,0)]
        random.shuffle(colorList)
        c1 = colorList[0]
        c2 = colorList[1]
        c3 = colorList[2]
        c4 = colorList[3]
    TextComponent text
      letterHeight = 0.03
      pos = (0, 0.22)
      startVal [time (s)] = 0
      text [set every repeat] = $textStim
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    TextComponent q
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0
      text [set every repeat] = $question
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    TextComponent a1
      color [set every repeat] = $c1
      letterHeight = 0.03
      pos = (-0.4, -0.22)
      startVal [time (s)] = 0
      text [set every repeat] = $ans1
      wrapWidth = 0.5
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    TextComponent a2
      color [set every repeat] = $c2
      letterHeight = 0.03
      pos = (0.4, -0.22)
      startVal [time (s)] = 0
      text [set every repeat] = $ans2
      wrapWidth = 0.5
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    TextComponent a3
      color [set every repeat] = $c3
      letterHeight = 0.03
      pos = (-0.4, -0.37)
      startVal [time (s)] = 0
      text [set every repeat] = $ans3
      wrapWidth = 0.5
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    TextComponent a4
      color [set every repeat] = $c4
      letterHeight = 0.03
      pos = (0.4,-0.37)
      startVal [time (s)] = 0
      text [set every repeat] = $ans4
      wrapWidth = 0.5
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    MouseComponent resp
      clickable = a1,a2,a3,a4
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0
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    PolygonComponent polygon
      fillColor = white
      pos = (-1/2*win.size[0]/win.size[1]+.075, -0.425)
      shape = rectangle
      size = (0.15,0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      units = height
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  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        1) Διάβασε το κείμενο.
        2) Διάβασε την ερώτηση που ακολουθεί.
        3) Κάνε κλικ στη σωστή απάντηση

        Όταν είσαι έτοιμος/η, κάνε κλικ για να ξεκινήσεις
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine ready
    TextComponent getReady
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = Ετοιμάσου!
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Flow
  Routine instr
  LoopInitiator textTrials loopType="TrialHandler"
    conditionsFile = first.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('textStim', 'Η Άννα, ο Αλέξης και ο αδελφός του, ο Βασίλης, αποφασίζουν να πάνε για εξερεύνηση στο διπλανό χωριό. Έχουν ακούσει από τους γονείς του πως εκεί κρύβεται από τα παιδικά τους χρόνια ένας θησαυρός. Παίρνουν μαζί τους το σκύλο της Άννας, τον Νταρκ, για να τους βοηθήσει. Είναι ένα λαγωνικό με γυαλιστερό μαύρο τρίχωμα και λευκή μουσούδα. Λίγο πριν από το χωριό ο Νταρκ σκάβει και ανακαλύπτει ένα σεντούκι. Οι τρεις φίλοι χοροπηδούν από τη χαρά τους εδώ κι εκεί. Το ανοίγουν και αντί για νομίσματα βρίσκουν αμέτρητα γράμματα. Διαβάζουν ένα από αυτά και διαπιστώνουν πως ήταν η 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,
      OrderedDict([('textStim', 'Ο δάσκαλος του Μεγάλου Αλεξάνδρου ήταν ο φιλόσοφος Αριστοτέλης. Του δίδαξε ρητορική και λογοτεχνία, ενώ παράλληλα εισήγαγε τον Μέγα Αλέξανδρο στη φιλοσοφία, την ιατρική και τις επιστήμες. Ο Μέγας Αλέξανδρος ήταν θαυμαστής του Ομήρου και θιασώτης των συγγραμάτων του. Έχει, μάλιστα, ειπωθεί ότι όταν κοιμόταν έβαζε την Ιλιάδα κάτω από το μαξιλάρι του! Ο Αριστοτέλης του δίδαξε πάνω από όλα να σέβεται τους συνανθρώπους του. Ο Μέγας Αλέξανδρος σεβόταν τόσο το δάσκαλό του, που έλεγε ότι στον πατέρα του όφειλε τη ζωή του, ενώ στο δάσκαλό του την ποιότητα της ζωής του.'), ('q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
    Routine ready
    LoopInitiator questionTrials loopType="TrialHandler"
      conditionsFile = $questionsAndAnswers
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator questionTrials
  LoopTerminator textTrials
