PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1366, 768]
  expName = ToM
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Routines
  Routine trial_1
    TextComponent fix1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = +
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    MovieComponent fVid
      backend = moviepy
      durationEstim = 9
      forceEndRoutine = False
      movie [set during: trial_1.preloadfVid] = $firstVideo
      startVal [time (s)] = 3
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    TextComponent fix2
      letterHeight = 0.1
      startVal [condition] = fVid.status==FINISHED
      stopVal [duration (s)] = 3
      text = +
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    MovieComponent sVid
      backend = moviepy
      durationEstim = 3
      forceEndRoutine = False
      movie [set during: trial_1.preloadfVid] = $secondVideo
      startVal [condition] = fix2.status==FINISHED
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    CodeComponent StartTime
      Code Type = Py
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      Begin Routine:
        #flag = False
        #if fVid.status==STARTED and flag==False:
        on_flag_fvid = False
        on_flag_svid = False
        mouse.setVisible(False)

        # Flags to keep video times

        #thisExp.addData('firstVideo.started ', globalClock.getTime() + fixation1_stopped)



        #flag = True
      Each Frame:
        if fVid.status==FINISHED and on_flag_fvid == False:
            fVid.tStopRefresh = tThisFlipGlobal
            on_flag_fvid = True

        if sVid.status==FINISHED and on_flag_svid == False:
            sVid.tStopRefresh = tThisFlipGlobal
            on_flag_svid = True
            mouse.setPos(newPos=(0,0))
            mouse.setVisible(True)


            #thisExp.addData('firstVideo.started ', globalClock.getTime() + fixation1_stopped)
      End Routine:
        thisExp.addData('fVid.started',  fVid.tStartRefresh)
        thisExp.addData('sVid.started', sVid.tStartRefresh)

        thisExp.addData('fVid.stopped', fVid.tStopRefresh)
        thisExp.addData('sVid.stopped', sVid.tStopRefresh)
    CodeComponent StopTime
      Code Type = Py
      disabled = True
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      Each Frame:
        flag_stop = False
        if fVid.status==FINISHED and flag_stop==False:
            thisExp.addData('firstVideo.stopped ', globalClock.getTime()+fixation1_stopped)
            flag_stop = True
      End Routine:
        thisExp.addData('firstVideo.stopped ', globalClock.getTime())
    StaticComponent preloadfVid
      durationEstim = 1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    MouseComponent mouse
      clickable = correct,incorrect
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [condition] = sVid.status==FINISHED
      syncScreenRefresh = True
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    ImageComponent correct
      image = true.png
      pos = (0.4,0)
      size = (0.1,0.1)
      startVal [condition] = sVid.status==FINISHED
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    ImageComponent incorrect
      image = false.png
      pos = (-0.4,0)
      size = (0.1,0.1)
      startVal [condition] = sVid.status==FINISHED
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  Routine instr
    CodeComponent Sampling
      Code Type = Py
      Begin Experiment:
        '''import os
        from random import sample,shuffle
        with open('.' + os.sep + 'TomVideos' + os.sep + 'videoList.csv') as f:
            lines = f.readlines()

        x = []
        for line in lines:
            x.append(line.split(','))

            con_indices =   [i-1 for i in range(len(x)) if x[i][2]=='1']
            incon_indices = [i-1 for i in range(len(x)) if x[i][2]=='0']

        # Balancing congruent & incongruent trials
        # Testing
        repIndices = sample(con_indices, 1) + sample(incon_indices, 1)

        shuffle(repIndices)'''
        '''
        Code to not have more than two similar stories
        appearing consecutively
        Hard-coded for 96 stimuli
        '''
        x = [[i for i in range(12)],
             [i for i in range(12,24)],
             [i for i in range(24,36)],
             [i for i in range(36,48)],
             [i for i in range(48,60)],
             [i for i in range(60,72)],
             [i for i in range(72,84)],
             [i for i in range(84,96)]]

        repIndices = []


        rows = [i for i in range(8)]
        cols = [i for i in range(12)]

        for col in cols:
            shuffle(x) # Shuffles row-wise
            for row in rows:
                shuffle(x[row]) # Shuffle column-wise
                if len(x[row])>0: #
                    temp = x[row].pop(-1)
                    #temp = x[row].pop(randint(0,len(x[row])-1))
                    repIndices.append(temp)
        # Production - Uncomment lines below
        # sample_num = min(len(con_indices), len(incon_indices))
        # repIndices  = sample(con_indices, sample_num) + sample(incon_indices, sample_num)
        # Uncomment if necessary
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Put instructions here
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $repIndices
    conditionsFile = TomVideos/videoList.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('firstVideo', 'BottleChangeSeen.mpg.mp4'), ('secondVideo', 'BottleEndMecaD.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleChangeSeen.mpg.mp4'), ('secondVideo', 'BottleEndMecaG.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleChangeSeen.mpg.mp4'), ('secondVideo', 'BottleEndMentaD.mpg.mp4'), ('congruent', 1), ('corrAns', 'correct')]),
      OrderedDict([('firstVideo', 'BottleChangeSeen.mpg.mp4'), ('secondVideo', 'BottleEndMentaG.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleChangeUnseen.mpg.mp4'), ('secondVideo', 'BottleEndMecaD.mpg.mp4'), ('congruent', 1), ('corrAns', 'correct')]),
      OrderedDict([('firstVideo', 'BottleChangeUnseen.mpg.mp4'), ('secondVideo', 'BottleEndMecaG.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleChangeUnseen.mpg.mp4'), ('secondVideo', 'BottleEndMentaD.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleChangeUnseen.mpg.mp4'), ('secondVideo', 'BottleEndMentaG.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleNoChange.mpg.mp4'), ('secondVideo', 'BottleEndMecaD.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')]),
      OrderedDict([('firstVideo', 'BottleNoChange.mpg.mp4'), ('secondVideo', 'BottleEndMecaG.mpg.mp4'), ('congruent', 0), ('corrAns', 'incorrect')])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
    Routine trial_1
  LoopTerminator trials
