PsychoPy2experiment version="2021.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = verbNaming
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Routines
  Routine instr
    TextComponent instrText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Σε αυτό το πείραμα θα εμφανίζονται εικόνες αντικειμένων στην οθόνη. Στόχος είναι να πεις τα ονόματα των αντικειμένων όσο πιο γρήγορα μπορείς. Θα κάνεις 3 διαλείμματα. Καλή επιτυχία!
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent imports
      Code Type = Py
      Begin Experiment:
        '''
        from scipy.io import wavfile
        from scipy.signal import hilbert, find_peaks, peak_widths, butter, lfilter
        import numpy as np

        def butter_lowpass(cutoff, fs, order=5):
          nyq = 0.5 * fs
          normal_cutoff = cutoff / nyq
          b, a = butter(order, normal_cutoff, btype='low', analog=False)
          return b, a

        def butter_lowpass_filter(data, cutoff, fs, order=5):
          b, a = butter_lowpass(cutoff, fs, order=order)
          y = lfilter(b,a,data)
          return y



        def getSoundTimeStamps(filename, cutoff=200, order=1):
          samplerate, data = wavfile.read(filename)
          xn = np.int64(data)
          xn = xn - np.mean(xn) # Detrend

          fs = samplerate
          x_smoothed = butter_lowpass_filter(xn, cutoff, fs, order)
          hil_trans = hilbert(x_smoothed)

          y = np.sqrt(x_smoothed*x_smoothed + hil_trans.imag*hil_trans.imag)
          y /= np.max(y)

          peaks, properties = find_peaks(y, prominence=0.02,width=30)

          intervals = np.array(peaks[0],dtype=np.int64) # Start of first interval
          for i in range(len(peaks)-1):
            if peaks[i+1]-peaks[i] > samplerate/8:
              intervals = np.append(intervals, peaks[i])    # End of interval
              intervals = np.append(intervals, peaks[i+1])  # Start of next interval
          intervals = np.append(intervals, peaks[-1])   # End of last interval
          if intervals[0]==intervals[1]: # Single peak Na to dior8wsw na pianei k allou ektos ap'thn arxh
            intervals = np.delete(intervals,0)
            intervals = np.delete(intervals,0)
          widths = peak_widths(y, intervals, rel_height=0.95)[0]

          try:
            intervals.shape = (intervals.size//2, 2) # Make 2D array - 1st column start, 2nd end
          except ValueError as e: # Perittos ari8mos timestamps, leipei start h end
            print(e)
            thisExp.addData('Wrong_timestamps_check_wav', 1) # Na to grapsw sth routina, edw de douleuei
            # Na aporriptontai ta mikra intervals (Poso mikra?)
            # Na dw to sox an anagnwrizei foni kala
            # Na metatrepsw sth routina to samples se sec
          finally:
            print(filename.split('/')[-1],'\n', intervals)
            return intervals/samplerate
        '''
      Begin Routine:
        mouse.setPos([0,0])
      End Routine:
        mouse.setVisible(0)
  Routine trial
    CodeComponent interTrial
      Code Type = Py
      Begin Routine:
        from random import random

        intertrial_interval = random()*2
    TextComponent fixCross
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    ImageComponent image
      image [set every repeat] = $fname
      size = (0.5, 0.5)
      startVal [condition] = fixCross.status==FINISHED
      stopVal [duration (s)] = 0.2
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    PolygonComponent polygon
      fillColor = white
      pos = (-1/2*win.size[0]/win.size[1]+.075, -0.425)
      shape = rectangle
      size = (0.15,0.15)
      startVal [condition] = image.status==STARTED
      stopVal [duration (s)] = .1
      units = height
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    MicrophoneComponent resp
      channel = 0
      startVal [condition] = image.status==STARTED
      stereo = False
      stopVal [duration (s)] = 3
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    TextComponent empty
      letterHeight = 0.1
      startVal [condition] = resp.status==FINISHED
      stopVal [duration (s)] = intertrial_interval
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    StaticComponent ISI
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        flag=False
      Each Frame:
        #resp.savedFile


        '''
        if resp.status==FINISHED and flag==False:
          intervals = getSoundTimeStamps(resp.savedFile)
          thisExp.addData('Time_Intervals', intervals)
          #thisExp.addData(f'start_time', intervals[0])
          #thisExp.addData(f'finish_time', intervals[1])
          #if len(intervals)>2: thisExp.addData(f'>1 Interval', True)
            #onset, offset = resp.getMarkerOnset(chunk=64, secs=3)
            #diarkeia = resp.getMarkerInfo()[1]
            #thisExp.addData('onset',diarkeia)
            #thisExp.addData('offset',offset)
          flag=True
        '''
  Routine pause
    CodeComponent breakCond
      Code Type = Py
      Begin Routine:
        pauseMouse.setVisible(1)
        pauseMouse.setPos([0,0])
        if trials.thisN == 0 or trials.thisN % 10 != 0:
            continueRoutine = False
      End Routine:
        pauseMouse.setVisible(0)
    TextComponent pauseText
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Διάλλειμα!

        Όταν είσαι έτοιμος/η κάνε κλικ για να συνεχίσεις!
    MouseComponent pauseMouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent fbCode
      Code Type = Py
      Begin Routine:
        if trials.thisN % 96 != 0 or trials.thisN == 0:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Το πείραμα τελείωσε. Ευχαριστούμε πολύ!
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Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = imageList.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('fname', 'actionImages/aggizw.png'), ('corrName', 'αγγίζει')]),
      OrderedDict([('fname', 'actionImages/agkaliazw.png'), ('corrName', 'αγκαλιάζει')]),
      OrderedDict([('fname', 'actionImages/akouw.png'), ('corrName', 'ακούει')]),
      OrderedDict([('fname', 'actionImages/aloifw.png'), ('corrName', 'αλοίφει')]),
      OrderedDict([('fname', 'actionImages/anakatevw.png'), ('corrName', 'ανακατεύει')]),
      OrderedDict([('fname', 'actionImages/anoigwTrypa.png'), ('corrName', 'ανοίγει τρύπα')]),
      OrderedDict([('fname', 'actionImages/dagwnw.png'), ('corrName', 'δαγκώνει')]),
      OrderedDict([('fname', 'actionImages/dieuthinwOrxistra.png'), ('corrName', 'διευθύνει ορχήστρα')]),
      OrderedDict([('fname', 'actionImages/dinwGramma.png'), ('corrName', 'δίνει γράμμα')]),
      OrderedDict([('fname', 'actionImages/ekrignitai.png'), ('corrName', 'εκρήγνυται')]),
      OrderedDict([('fname', 'actionImages/epiplew.png'), ('corrName', 'επιπλέει')]),
      OrderedDict([('fname', 'actionImages/episkeuazw.png'), ('corrName', 'επισκευάζει')]),
      OrderedDict([('fname', 'actionImages/fiteuw.png'), ('corrName', 'φυτεύει')]),
      OrderedDict([('fname', 'actionImages/ftanw.png'), ('corrName', 'φτάνει')]),
      OrderedDict([('fname', 'actionImages/gaugizw.png'), ('corrName', 'γαυγίζει')]),
      OrderedDict([('fname', 'actionImages/gelaw (2).png'), ('corrName', 'γελάει')]),
      OrderedDict([('fname', 'actionImages/gelaw.png'), ('corrName', 'γελάει')]),
      OrderedDict([('fname', 'actionImages/grafwGramma.png'), ('corrName', 'γράφει γράμμα')])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
    Routine trial
    Routine pause
    Routine feedback
  LoopTerminator trials
